begintemplate DGCell
    public soma, dend
    
    create soma
    create dend[2]

    proc init(){
        
        soma {L = 20 diam = 15 nseg = 1}
        dend[0] {diam= 3 L=270 nseg=8}     
		dend[1] {diam =5 L=555 nseg=7} 

		gh = 4.2e-05
		gnat = 0.07


        soma { 
            cm = 0.8
			insert leakDG
            
			insert nat
			gbar_nat = gnat
			ena = 45
		
            insert kdr
			ek = -80

			insert hd
			ghdbar_hd = gh
			ehd = -45
			
			/*
            insert Nap
            gbar_nap = 0.005
			*/
            
        }

				
        dend[0] {
			cm = 0.8
            insert leakDG
			
			insert nat
			gbar_nat = gnat
			ena = 45
		
            insert kdr
            ek = -80
            
			insert hd
			ghdbar_hd = gh
			ehd = -45
			/*
            insert Nap
            gbar_nap = 0.005
			*/

        }

        dend[1] {
			cm = 0.8

            insert leakDG
			
			insert nat
			gbar_nat = 0.009
			ena = 45
		
            insert kdr
            ek = -80

			insert hd
			ghdbar_hd = 1.5e-05
			ehd = -45

            /*
			insert Nap
            gbar_nap = 0.005
			*/	
                        
        }
		
		

        connect soma(1), dend[0](0)
		connect dend[1](1), soma(0)

        define_shape()
    }

endtemplate DGCell